PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'age': '', 'gender': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/ospan_block/Block1.xlsx', 'resources/ospan_block/Block2.xlsx', 'resources/ospan_block/Block3.xlsx', 'resources/ospan_block/Block4.xlsx', 'resources/ospan_block/Block5.xlsx', 'resources/ospan_block/Block6.xlsx', 'resources/ospan_block/Block7.xlsx', 'resources/ospan_block/Block8.xlsx', 'resources/ospan_block/Block9.xlsx', 'resources/ospan_block/Block10.xlsx', 'resources/n-back/letters1.xlsx', 'resources/n-back/letters2.xlsx', 'resources/n-back/letters3.xlsx', 'resources/n-back/letters4.xlsx', 'resources/n-back/letters5.xlsx', 'resources/n-back/letters6.xlsx', 'resources/n-back/letters7.xlsx', 'resources/n-back/letters8.xlsx', 'resources/n-back/letters9.xlsx', 'resources/n-back/letters10.xlsx', 'resources/SoundList.xlsx', 'resources/01-White-Noise-10min.wav', 'resources/binaurale.wav']
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = Psych121Project_nback_ospan
  frameRate = 60
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine Recall
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    TextComponent text_3
      color = White
      letterHeight = 0.15
      startVal [time (s)] = 0.0
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      text:
        Please type the letters you have just seen in order.

        Press the spacebar when you are finished
    KeyboardComponent key_resp_3
      allowedKeys = 'q','r','t','p','s','d','f','g','h','j','k','l','z','x','c','v','b','n','m'
      correctAns = $corrResp
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
      storeCorrect = True
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent code_2
      Code Type = Py
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      End Routine:
        # ---------- End Routine  (runs at the end of each round) ----------
        sound_idx = (sound_idx + 1) % len(sound_list)   # advance the pointer
  Routine instructions
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    TextComponent inst_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a series of math problems and letters.
        For each round: First, you will see a math problem (for example: (3 + 4) x 2 = 14). Decide if the answer is correct or incorrect. If it is correct press the right arrow key', if it is incorrect press the left arrow key.

        Immediately after each math problem, you will see a blue letter. Try to remember each letter in the order you see them.

        After a series of math problems and letters, you will will be prompted to recall the letters you have just seen. Type on the keyboard the letters that have appeared, in the same order in which they appeared. When you have finished, press the space bar.

        After the recall phase, a new series will begin and you can forget the previous letters.

        Please try to do your best on both the math problems and remembering the letters.

        Press the space bar to begin.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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  Routine trial_warning
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    TextComponent text_5
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Attention, a new trial is starting. You may forget responses from the previous trials, please only focus on the upcoming trial.
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  Routine practice_warning
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    TextComponent text_6
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = This is a practice trial.
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  Routine stimulus
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.3
      text [set every repeat] = $Stimulus
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $Response
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      storeCorrect = True
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  Routine nback_instruction
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    TextComponent nback_inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see letters.
        Each letter is shown for a few seconds. You need to decide if you saw the same letter 3 letters ago. This is called an "N=3-Back Task"

        If you saw the same letter 3 letters ago, you should press the "space" key.

        Here is an example: A --- Y --- P --- A
        You would press space when seeing the 2nd "A"


        Press the space key to continue to the task.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine nback
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    TextComponent nback_stim
      color = blue
      letterHeight = 0.3
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $letter
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    KeyboardComponent nback_resp
      allowedKeys = 'space'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine ospan_stim
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    TextComponent text_2
      color = blue
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Letter
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  Routine music
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    SoundComponent white_noise
      sound [set every repeat] = 01-White-Noise-10min.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
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  Routine start_sound
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        # ---------- Before Experiment  (runs once) ----------
        import random

        sound_list = [
            'resources/binaurale.wav',
            'resources/01-White-Noise-10min.wav',
            None
        ]
        random.shuffle(sound_list)   # Shuffle once before starting
        sound_idx = 0          # will move forward later
        background_sound = None   # handle for the clip that’s playing
      Begin Routine:
        global background_sound, sound_idx, sound_list

        # Stop the previous sound
        if background_sound:
            background_sound.stop()

        # Check if sounds remain
        if sound_idx < len(sound_list):
            next_file = sound_list[sound_idx]
            sound_idx += 1

            if next_file:
                background_sound = sound.Sound(next_file)
                background_sound.play()
            else:
                background_sound = None
        else:
            background_sound = None  # No sound if list is exhausted
  Routine sound_question
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    TextComponent sound_question_text
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        What kind of Sound are u listening to?

        Please type: ("binaural", "white noise", "silence")

        Press 'RETURN' to move on.
    TextboxComponent sound_question_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder [set every repeat] = Type here...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent sound_question_resp
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine random_2
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        import random
        nback_pathorigin = "resources/n-back/letters"
        randn = random.randint(1, 10)
        nback_path = f"{nback_pathorigin}{randn}.xlsx"

        span_pathorigin = "resources/ospan_block/Block"
        randex = random.randint(1, 10)
        spanex_path = f"{span_pathorigin}{randex}.xlsx"

        rand2 = random.randint(1, 10)
        span2_path = f"{span_pathorigin}{rand2}.xlsx"

        rand3 = random.randint(1, 10)
        span3_path = f"{span_pathorigin}{rand3}.xlsx"

        rand4 = random.randint(1, 10)
        span4_path = f"{span_pathorigin}{rand4}.xlsx"

        rand5 = random.randint(1, 10)
        span5_path = f"{span_pathorigin}{rand5}.xlsx"

        rand6 = random.randint(1, 10)
        span6_path = f"{span_pathorigin}{rand6}.xlsx"

        rand7 = random.randint(1, 10)
        span7_path = f"{span_pathorigin}{rand7}.xlsx"
Flow
  LoopInitiator sound_loop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine random_2
    Routine start_sound
    Routine sound_question
    Routine nback_instruction
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = $nback_path
      loopType = sequential
      nReps = 1
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      conditions:
        [{'letter': 'M', 'correct': None},
        {'letter': 'O', 'correct': None},
        {'letter': 'X', 'correct': None},
        {'letter': 'P', 'correct': None},
        {'letter': 'X', 'correct': None},
        {'letter': 'L', 'correct': None},
        {'letter': 'P', 'correct': 'space'},
        {'letter': 'A', 'correct': None},
        {'letter': 'R', 'correct': None},
        {'letter': 'K', 'correct': None},
        {'letter': 'A', 'correct': 'space'},
        {'letter': 'R', 'correct': 'space'},
        {'letter': 'B', 'correct': None},
        {'letter': 'N', 'correct': None},
        {'letter': 'T', 'correct': None},
        {'letter': 'T', 'correct': None},
        {'letter': 'N', 'correct': 'space'},
        {'letter': 'Y', 'correct': None},
        {'letter': 'S', 'correct': None},
        {'letter': 'R', 'correct': None},
        {'letter': 'Y', 'correct': 'space'},
        {'letter': 'F', 'correct': None},
        {'letter': 'R', 'correct': 'space'},
        {'letter': 'A', 'correct': None},
        {'letter': 'K', 'correct': None},
        {'letter': 'F', 'correct': None},
        {'letter': 'B', 'correct': None},
        {'letter': 'K', 'correct': 'space'},
        {'letter': 'A', 'correct': None}]
      Routine nback
    LoopTerminator trials_3
    Routine instructions
    Routine practice_warning
    LoopInitiator trialloop loopType="TrialHandler"
      Selected rows = 0:2
      conditionsFile = $spanex_path
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Type': 'Operation', 'Span': 'Example', 'Stimulus': '( 3 - 1 ) × 2 = 4', 'Response': 'right', 'Letter': 'D', 'corrResp': None},
        {'Type': 'Operation', 'Span': 'Example', 'Stimulus': '( 3 + 6 ) × 2 = 16', 'Response': 'left', 'Letter': 'T', 'corrResp': ['d', 't']},
        {'Type': 'Operation', 'Span': 2, 'Stimulus': '( 4 - 1 ) × 1 = 6', 'Response': 'left', 'Letter': 'S', 'corrResp': None},
        {'Type': 'Operation', 'Span': 2, 'Stimulus': '( 3 + 1 ) × 3 = 12', 'Response': 'right', 'Letter': 'B', 'corrResp': ['s', 'b']},
        {'Type': 'Operation', 'Span': 3, 'Stimulus': '( 4 + 2 ) × 2 = 8', 'Response': 'left', 'Letter': 'C', 'corrResp': None},
        {'Type': 'Operation', 'Span': 3, 'Stimulus': '( 3 - 1 ) × 3 = 5', 'Response': 'left', 'Letter': 'L', 'corrResp': None},
        {'Type': 'Operation', 'Span': 3, 'Stimulus': '( 5 - 1 ) × 5 = 20', 'Response': 'right', 'Letter': 'G', 'corrResp': ['c', 'l', 'g']},
        {'Type': 'Operation', 'Span': 4, 'Stimulus': '( 6 + 2 ) × 1 = 8', 'Response': 'right', 'Letter': 'D', 'corrResp': None},
        {'Type': 'Operation', 'Span': 4, 'Stimulus': '( 4 - 3 ) × 5 = 5', 'Response': 'left', 'Letter': 'V', 'corrResp': None},
        {'Type': 'Operation', 'Span': 4, 'Stimulus': '( 3 - 1 ) × 5 = 10', 'Response': 'left', 'Letter': 'M', 'corrResp': None},
        {'Type': 'Operation', 'Span': 4, 'Stimulus': '( 6 - 1 ) × 1 = 6', 'Response': 'left', 'Letter': 'P', 'corrResp': ['d', 'v', 'm', 'p']},
        {'Type': 'Operation', 'Span': 5, 'Stimulus': '( 5 - 2 ) × 3 = 9', 'Response': 'right', 'Letter': 'L', 'corrResp': None}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
      Routine stimulus
      Routine ospan_stim
    LoopTerminator trialloop
    Routine Recall
    Routine trial_warning
    LoopInitiator trialloop2 loopType="TrialHandler"
      Selected rows = 2:7
      conditionsFile = $span2_path
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine stimulus
      Routine ospan_stim
    LoopTerminator trialloop2
    Routine Recall
    Routine trial_warning
    LoopInitiator trialloop3 loopType="TrialHandler"
      Selected rows = 7:12
      conditionsFile = $span3_path
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine stimulus
      Routine ospan_stim
    LoopTerminator trialloop3
    Routine Recall
    Routine trial_warning
    LoopInitiator trialloop4 loopType="TrialHandler"
      Selected rows = 12:17
      conditionsFile = $span4_path
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine stimulus
      Routine ospan_stim
    LoopTerminator trialloop4
    Routine Recall
    Routine trial_warning
    LoopInitiator trialloop5 loopType="TrialHandler"
      Selected rows = 17:22
      conditionsFile = $span5_path
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine stimulus
      Routine ospan_stim
    LoopTerminator trialloop5
    Routine Recall
    Routine trial_warning
    LoopInitiator trialloop6 loopType="TrialHandler"
      Selected rows = 22:27
      conditionsFile = $span6_path
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine stimulus
      Routine ospan_stim
    LoopTerminator trialloop6
    Routine Recall
    Routine trial_warning
    LoopInitiator trialloop7 loopType="TrialHandler"
      Selected rows = 27:32
      conditionsFile = $span7_path
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine stimulus
      Routine ospan_stim
    LoopTerminator trialloop7
    Routine Recall
  LoopTerminator sound_loop
